 
# 
# >>>> INPUT FILE FOR MC-GPU v1.5 VICTRE-DBT >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
#                
#  Geometria 7G
#  per eseguire:
#  cd example_simulations
#  ./MC-GPU_v1.5b.x cbct_circular.in | tee cbct_circular.out
#

#[SECTION SIMULATION CONFIG v.2009-05-12]
1.0e11                        # Simulating only 1% of the expected mammo exposure for testing!    ORIGINAL HISTORIES:  3.4e11             # TOTAL NUMBER OF HISTORIES, OR SIMULATION TIME IN SECONDS IF VALUE < 100000
55567891              # RANDOM SEED (ranecu PRNG)
10                              # GPU NUMBER TO USE WHEN MPI IS NOT USED, OR TO BE AVOIDED IN MPI RUNS
128                           # GPU THREADS PER CUDA BLOCK (multiple of 32)
5000                         # SIMULATED HISTORIES PER GPU THREAD
 
#[SECTION SOURCE v.2016-12-02]
spectrum/120kV_Al100um_Brass60um.spc    # X-RAY ENERGY SPECTRUM FILE
#spectrum/80kV_Al340um.spc    # X-RAY ENERGY SPECTRUM FILE
#spectrum/mono.spc    # X-RAY ENERGY SPECTRUM FILE
 0.0   -57.8   0.0          #  SOURCE POSITION: X (chest-to-nipple), Y (right-to-left), Z (caudal-to-cranial) [cm]
 0.0    1.0    0.0             # SOURCE DIRECTION COSINES: U V W
-1   -1    # ==> 2/3 original angle of 11.203       # TOTAL AZIMUTHAL (WIDTH, X) AND POLAR (HEIGHT, Z) APERTURES OF THE FAN BEAM [degrees] (input negative to automatically cover the whole detector)
0.0  0.0   0.0             # EULER ANGLES (RzRyRz) TO ROTATE RECTANGULAR BEAM FROM DEFAULT POSITION AT Y=0, NORMAL=(0,-1,0)
 0.0                         # SOURCE GAUSSIAN FOCAL SPOT FWHM [cm]
 0.0        # 0.18 for DBT, 0 for FFDM [Mackenzie2017]     # ANGULAR BLUR DUE TO MOVEMENT ([exposure_time]*[angular_speed]) [degrees]
NO                             # COLLIMATE BEAM TOWARDS POSITIVE AZIMUTHAL (X) ANGLES ONLY? (ie, cone-beam center aligned with chest wall in mammography) [YES/NO]
 
#[SECTION IMAGE DETECTOR v.2017-06-20]
results/maria_cristeta_fit_no_stretcher/AF_head_registered_mariaCristeta_vox_5labels_120_kV512x512x2float   # OUTPUT IMAGE FILE NAME
512      512                  # NUMBER OF PIXELS IN THE IMAGE: Nx Nz
29.34    29.34                 # IMAGE SIZE (width, height): Dx Dz [cm]
98.70                           # SOURCE-TO-DETECTOR DISTANCE (detector set in front of the source, perpendicular to the initial direction)
 0.0    0.0                     # IMAGE OFFSET ON DETECTOR PLANE IN WIDTH AND HEIGHT DIRECTIONS (BY DEFAULT BEAM CENTERED AT IMAGE CENTER) [cm]
 0.06                         # DETECTOR THICKNESS [cm] 0.035 for 7G 1000 for ideal
 0.0274                       # ==> MFP(CsI,59.6keV -> 0.0274)   # DETECTOR MATERIAL MEAN FREE PATH AT AVERAGE ENERGY [cm]
 1000000.0 11223.0 0.596 0.00593  # DETECTOR K-EDGE ENERGY [eV], K-FLUORESCENCE ENERGY [eV], K-FLUORESCENCE YIELD, MFP AT FLUORESCENCE ENERGY [cm]
 0    0.99                   # EFECTIVE DETECTOR GAIN, W_+- [eV/ehp], AND SWANK FACTOR (input 0 to report ideal energy fluence)
 0.0                         # ADDITIVE ELECTRONIC NOISE LEVEL (electrons/pixel)
 0.0  1.9616          # ==> MFP(polystyrene,19keV)       # PROTECTIVE COVER THICKNESS (detector+grid) [cm], MEAN FREE PATH AT AVERAGE ENERGY [cm]
 0.0   31.0   0.0065            # ANTISCATTER GRID RATIO, FREQUENCY, STRIP THICKNESS [X:1, lp/cm, cm] (enter 0 to disable the grid)
 0.00089945   1.9616   # ==> MFP(lead&polystyrene,19keV)  # ANTISCATTER STRIPS AND INTERSPACE MEAN FREE PATHS AT AVERAGE ENERGY [cm]
 0                              # ORIENTATION 1D FOCUSED ANTISCATTER GRID LINES: 0==STRIPS PERPENDICULAR LATERAL DIRECTION (mammo style); 1==STRIPS PARALLEL LATERAL DIRECTION (DBT style)
 material/Pen_base/icrp_CsI.mcgpu         # detector material

#[SECTION TOMOGRAPHIC TRAJECTORY v.2016-12-02]
480       # ==> 1 for mammo only; ==> 25 for mammo + DBT    # NUMBER OF PROJECTIONS (1 disables the tomographic mode)
57.8                            # SOURCE-TO-ROTATION AXIS DISTANCE serve per ofsettare il centro di rotazione, mettere uguale -source position
0.750                             # ANGLE BETWEEN PROJECTIONS (360/num_projections for full CT) [degrees]
0.0                             # ANGULAR ROTATION TO FIRST PROJECTION (USEFUL FOR DBT, INPUT SOURCE DIRECTION CONSIDERED AS 0 DEGREES) [degrees]
0.0  0.0  1.0                   # AXIS OF ROTATION (Vx,Vy,Vz)
0.0                             # TRANSLATION ALONG ROTATION AXIS BETWEEN PROJECTIONS (HELICAL SCAN) [cm]
NO                             # KEEP DETECTOR FIXED AT 0 DEGREES FOR DBT? [YES/NO]
NO                             # SIMULATE BOTH 0 deg PROJECTION AND TOMOGRAPHIC SCAN (WITHOUT GRID) WITH 2/3 TOTAL NUM HIST IN 1st PROJ (eg, DBT+mammo)? [YES/NO]

#[SECTION DOSE DEPOSITION v.2012-12-12]
NO                             # TALLY MATERIAL DOSE? [YES/NO] (electrons not transported, x-ray energy locally deposited at interaction)
NO                              # TALLY 3D VOXEL DOSE? [YES/NO] (dose measured separately for each voxel)
mc-gpu_dose.dat                 # OUTPUT VOXEL DOSE FILE NAME
  1  751                        # VOXEL DOSE ROI: X-index min max (first voxel has index 1)
  1 1301                        # VOXEL DOSE ROI: Y-index min max
250  250                        # VOXEL DOSE ROI: Z-index min max
 
#[SECTION VOXELIZED GEOMETRY FILE v.2017-07-26]
phantom/AF_head_registered_mariaCristeta_vox_245x326x352/AF_head_registered_mariaCristeta_vox_5labels_245x326x352.raw     # VOXEL GEOMETRY FILE (penEasy 2008 format; .gz accepted)
 -10.420  -10.598  -10.598              # OFFSET OF THE VOXEL GEOMETRY [cm]
 245 326 352                 # NUMBER OF VOXELS
 0.080 0.080 0.080           # VOXEL SIZES [cm]
 2 2 2                          # SIZE OF LOW RESOLUTION VOXELS

#[SECTION MATERIAL FILE LIST v.2020-03-03]
material/icrp_air.mcgpu density=0.001200 voxelId=0
material/MRCP_AF/icrp_Breast_left_adipose_tissue.mcgpu density=0.952000 voxelId=1
material/MRCP_AF/icrp_Muscle_head.mcgpu density=1.050000 voxelId=2
material/MRCP_AF/icrp_Cranium_spongiosa.mcgpu density=1.252000 voxelId=3
material/MRCP_AF/icrp_Cranium_cortical.mcgpu density=1.904000 voxelId=4
material/Pen_base/titanium.mcgpu density=4.54 voxelId=5
material/Pen_base/icrp_c.mcgpu density=2.00 voxelId=10
material/Pen_base/icrp_polyufoam.mcgpu density=0.021 voxelId=11


#material/icrp_air.mcgpu density=0.001200 voxelId=1
#material/icrp_air.mcgpu density=0.001200 voxelId=2
#material/icrp_air.mcgpu density=0.001200 voxelId=3
#material/icrp_air.mcgpu density=0.001200 voxelId=4
#material/icrp_air.mcgpu density=0.001200 voxelId=5
#material/icrp_air.mcgpu density=0.001200 voxelId=10
#material/icrp_air.mcgpu density=0.001200 voxelId=11


# >>>> END INPUT FILE >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
 
